PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Final
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Routines
  Routine Instructions
    TextComponent Instruction_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        After a period of time, either a blue or a purple arrow appears either on the left or the right side of the screen. Respond as quickly as possible according to rules below:

        If a purple arrow points to the side of the screen it appears on, press arrow key to that direction. (e.g. purple arrow pointing right on the right side of the screen = press right)

        If a blue arrow points to the middle of the screen, press arrow key to the direction of the arrow's tip. (e.g. blue arrow pointing left on the right side of the screen = press left)

        Do not press anything if neither of the conditions are met.

        Fixation cross marks a beginning of a new trial!

        If you understood press space bar and the experiment will start.
    KeyboardComponent Instruction_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Experiment
    TextComponent Fixation
      letterHeight = 0.1
      startVal [frame N] = 0.0
      stopVal [frame N] = 30
      text = +
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    ImageComponent Stimulusarrow
      image [set every repeat] = $imagefilestim
      opacity [set every repeat] = clrop
      pos [set every repeat] = coord
      size = (0.5, 0.5)
      startVal [frame N] = 33+onst
      stopVal [frame N] = 33+onst+2
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    NoiseStimComponent Backmask
      contrast = 0.15
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      pos [set every repeat] = coord
      sf = None
      size = (0.5, 0.5)
      startVal [frame N] = 32+onst
      stopVal [frame N] = 32+onst+1
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    NoiseStimComponent Frontmask
      contrast = 0.15
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      pos [set every repeat] = coord
      sf = None
      size = (0.5, 0.5)
      startVal [frame N] = 30+onst
      stopVal [frame N] = 30+onst+1
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    ImageComponent Primerarrow
      image [set every repeat] = $imagefileprim
      opacity [set every repeat] = primop
      pos [set every repeat] = coord
      size = (0.5, 0.5)
      startVal [frame N] = 31+onst
      stopVal [frame N] = 31+onst+1
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    KeyboardComponent Response
      allowedKeys = 'left','right'
      correctAns = $correc
      forceEndRoutine = True
      startVal [frame N] = 33+onst
      stopVal [frame N] = 33+onst+90
      storeCorrect = True
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Flow
  Routine Instructions
  LoopInitiator Exp_loop loopType="TrialHandler"
    conditionsFile = Conditions_Truefinal.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial': 1, 'coord': (0.5, 0), 'imagefilestim': 'rightpurple.png', 'clrop': 0.15, 'correc': 'right', 'primcond': 'None', 'imagefileprim': None, 'primop': None, 'onstcond': 'short', 'onst': 24},
      {'trial': 2, 'coord': (0.5, 0), 'imagefilestim': 'rightpurple.png', 'clrop': 0.15, 'correc': 'right', 'primcond': 'None', 'imagefileprim': None, 'primop': None, 'onstcond': 'short', 'onst': 24},
      {'trial': 3, 'coord': (0.5, 0), 'imagefilestim': 'rightpurple.png', 'clrop': 0.15, 'correc': 'right', 'primcond': 'None', 'imagefileprim': None, 'primop': None, 'onstcond': 'short', 'onst': 24},
      {'trial': 4, 'coord': (0.5, 0), 'imagefilestim': 'rightpurple.png', 'clrop': 0.15, 'correc': 'right', 'primcond': 'None', 'imagefileprim': None, 'primop': None, 'onstcond': 'long', 'onst': 48},
      {'trial': 5, 'coord': (0.5, 0), 'imagefilestim': 'rightpurple.png', 'clrop': 0.15, 'correc': 'right', 'primcond': 'None', 'imagefileprim': None, 'primop': None, 'onstcond': 'long', 'onst': 48},
      {'trial': 6, 'coord': (-0.5, 0), 'imagefilestim': 'rightpurple.png', 'clrop': 0.15, 'correc': 'None', 'primcond': 'None', 'imagefileprim': None, 'primop': None, 'onstcond': 'short', 'onst': 24},
      {'trial': 7, 'coord': (-0.5, 0), 'imagefilestim': 'rightpurple.png', 'clrop': 0.15, 'correc': 'None', 'primcond': 'None', 'imagefileprim': None, 'primop': None, 'onstcond': 'short', 'onst': 24}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
    Routine Experiment
  LoopTerminator Exp_loop
